CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:10
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:tif,tiff,flex,zvi movies
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):Alexa
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:CHA
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):DAPI
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:CHB
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    Channel number:1
    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:CHB
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,250
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlinesNuclei
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
ExpandOrShrinkObjects:[module_num:3|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
    Select the input objects:Nuclei
    Name the output objects:ShrinkedNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:Yes
    Name the outline image:ShrunkenNucleiOutlines

ExpandOrShrinkObjects:[module_num:4|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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNucleiLess
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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    Retain the outlines of the identified objects?:Yes
    Name the outline image:ExpandedNucleiLessOutlines

ExpandOrShrinkObjects:[module_num:5|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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNucleiMore
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
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    Retain the outlines of the identified objects?:Yes
    Name the outline image:ExpandedNucleMoreiOutlines

MaskObjects:[module_num:6|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
    Select objects to be masked:ExpandedNucleiMore
    Name the masked objects:RingCytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ExpandedNucleiLess
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:Yes
    Name the outline image:MaskedOutlineCells
    Invert the mask?:Yes

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:ShrunkenNucleiOutlines
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:PrimaryOutlineNuclei
    Number of digits:4
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    Saved file format:tif
    Output file location:Default Output Folder|nowe
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:CHA
    Select objects to measure:ShrinkedNuclei
    Select objects to measure:Nuclei
    Select objects to measure:RingCytoplasm

MeasureImageIntensity:[module_num:9|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
    Select the image to measure:CHA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:ShrinkedNuclei
    Select the image to measure:CHA
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:CHA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Nuclei
    Select the image to measure:CHA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:RingCytoplasm

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|nowe
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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